# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Variable Attenuator

# The version string should be updated whenever changes are made to this config file
version: 1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: VariableAttenuator

startup: Do nothing

[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# List of models supported by this driver
model_str_1: Model

check_option: false
option_str_1: MOD


# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
