# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Zurich Instruments MFLI

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Zurich Instruments MFLI

startup: Do nothing

[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# List of models supported by this driver
model_str_1: MFLI
model_str_2: MFLI-unlocked

check_option: false


# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
##############################################################################
################################# Signal Inputs ##############################
##############################################################################

### VOLTAGE INPUT ###
[SigIn1VoltageAutorange]
label: Voltage Input Autorange
datatype: BUTTON
group: Voltage Input
section: Signal Input
get_cmd: /%s/sigins/0/autorange

[SigIn1VoltageRange]
label: Voltage Input Range
datatype: DOUBLE
group: Voltage Input
section: Signal Input
get_cmd: /%s/sigins/0/range

[SigIn1VoltageScaling]
label: Voltage Input Scaling
datatype: DOUBLE
group: Voltage Input
section: Signal Input
get_cmd: /%s/sigins/0/scaling

[SigIn1VoltageAC]
label: Voltage Input AC
datatype: BOOLEAN
group: Voltage Input
section: Signal Input
get_cmd: /%s/sigins/0/ac

[SigIn1VoltageImp]
label: Voltage Input 50 ohm
datatype: BOOLEAN
group: Voltage Input
section: Signal Input
get_cmd: /%s/sigins/0/imp50

[SigIn1VoltageDiff]
label: Voltage Input Differential
datatype: BOOLEAN
group: Voltage Input
section: Signal Input
get_cmd: /%s/sigins/0/diff

[SigIn1VoltageFloat]
label: Voltage Input Float
datatype: BOOLEAN
group: Voltage Input
section: Signal Input
get_cmd: /%s/sigins/0/float

### CURRENT INPUT ###
[SigIn1CurrentAutorange]
label: Current Input Autorange
datatype: BUTTON
group: Current Input
section: Signal Input
get_cmd: /%s/currins/0/autorange

[SigIn1CurrentRange]
label: Current Input Range
datatype: DOUBLE
group: Current Input
section: Signal Input
get_cmd: /%s/currins/0/range

[SigIn1CurrentScaling]
label: Current Input Scaling
datatype: DOUBLE
group: Current Input
section: Signal Input
get_cmd: /%s/currins/0/scaling

[SigIn1CurrentFloat]
label: Current Input Float
datatype: BOOLEAN
group: Current Input
section: Signal Input
get_cmd: /%s/currins/0/float

##############################################################################
################################## Oscillators ###############################
##############################################################################
[Oscillator1Frequency]
label: Oscillator 1 Frequency
datatype: DOUBLE
unit: Hz
low_lim: 0
group: Oscillator 1
section: Oscillator
get_cmd: /%s/oscs/0/freq

[Oscillator2Frequency]
label: Oscillator 2 Frequency
datatype: DOUBLE
unit: Hz
low_lim: 0
group: Oscillator 2
section: Oscillator
get_cmd: /%s/oscs/1/freq

[Oscillator3Frequency]
label: Oscillator 3 Frequency
datatype: DOUBLE
unit: Hz
low_lim: 0
group: Oscillator 3
section: Oscillator
get_cmd: /%s/oscs/2/freq

[Oscillator4Frequency]
label: Oscillator 4 Frequency
datatype: DOUBLE
unit: Hz
low_lim: 0
group: Oscillator 4
section: Oscillator
get_cmd: /%s/oscs/3/freq

##############################################################################
################################# Demodulators ###############################
##############################################################################

### Demodulator 1 ###
[Demod1Enable]
label: Enable
datatype: BOOLEAN
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/enable

[Demod1Mode]
label: Mode
datatype: COMBO
combo_def_1: Manual
combo_def_2: ExtRef
combo_def_3: ExtRef Low BW
combo_def_4: ExtRef High BW
cmd_def_1: 0
cmd_def_2: 4
cmd_def_3: 2
cmd_def_4: 3
permission: READ
group: Demodulator 1
section: Demodulator
get_cmd: /%s/extrefs/0/%s
state_quant: Demod1Enable
state_value_1: 1

[Demod1Osc]
label: Oscillator
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/oscselect
state_quant: Demod1Enable
state_value_1: 1

[Demod1Harm]
label: Harmonic
datatype: DOUBLE
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/harmonic
state_quant: Demod1Enable
state_value_1: 1

[Demod1Freq]
label: Frequency
datatype: DOUBLE
permission: READ
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/freq
state_quant: Demod1Enable
state_value_1: 1

[Demod1PhaseAdjust]
label: Phase adjust
datatype: BUTTON
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/phaseadjust
state_quant: Demod1Enable
state_value_1: 1

[Demod1Phase]
label: Phase (deg)
datatype: DOUBLE
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/phaseshift
state_quant: Demod1Enable
state_value_1: 1

[Demod1Signal]
label: Signal
datatype: COMBO
combo_def_1: Sig In 1
combo_def_2: Curr In 1
combo_def_3: Trigger 1
combo_def_4: Trigger 2
combo_def_5: Aux Out 1
combo_def_6: Aux Out 2
combo_def_7: Aux Out 3
combo_def_8: Aux Out 4
combo_def_9: Aux In 1
combo_def_10: Aux In 2
combo_def_11: Constant
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
cmd_def_11: 174
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/adcselect
state_quant: Demod1Enable
state_value_1: 1

[Demod1Order]
label: Order
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/order
state_quant: Demod1Enable
state_value_1: 1

[Demod1BWUnit]
label: Unit
datatype: COMBO
combo_def_1: TC
combo_def_2: BW NEP
combo_def_3: BW 3 dB
group: Demodulator 1
section: Demodulator
state_quant: Demod1Enable
state_value_1: 1

[Demod1TC]
label: Time constant
datatype: DOUBLE
state_quant: Demod1BWUnit
state_value_1: TC
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/timeconstant

[Demod1BwNep]
label: BW NEP
datatype: DOUBLE
state_quant: Demod1BWUnit
state_value_1: BW NEP
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/timeconstant

[Demod1Bw3db]
label: BW 3 db
datatype: DOUBLE
state_quant: Demod1BWUnit
state_value_1: BW 3 dB
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/timeconstant

[Demod1SincFilter]
label: Sinc
datatype: BOOLEAN
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/sinc
state_quant: Demod1Enable
state_value_1: 1

[Demod1Rate]
label: Rate (Sa/s)
datatype: DOUBLE
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/rate
state_quant: Demod1Enable
state_value_1: 1

### Demodulator 2 ###
[Demod2Enable]
label: Enable
datatype: BOOLEAN
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/enable

[Demod2Mode]
label: Mode
datatype: COMBO
combo_def_1: Manual
combo_def_2: ExtRef
combo_def_3: ExtRef Low BW
combo_def_4: ExtRef High BW
cmd_def_1: 0
cmd_def_2: 4
cmd_def_3: 2
cmd_def_4: 3
group: Demodulator 2
section: Demodulator
get_cmd: /%s/extrefs/0/%s
state_quant: Demod2Enable
state_value_1: 1

[Demod2Osc]
label: Oscillator
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/oscselect
state_quant: Demod2Enable
state_value_1: 1

[Demod2Harm]
label: Harmonic
datatype: DOUBLE
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/harmonic
state_quant: Demod2Enable
state_value_1: 1

[Demod2Freq]
label: Frequency
datatype: DOUBLE
permission: READ
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/freq
state_quant: Demod2Enable
state_value_1: 1

[Demod2PhaseAdjust]
label: Phase adjust
datatype: BUTTON
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/phaseadjust
state_quant: Demod2Enable
state_value_1: 1

[Demod2Phase]
label: Phase (deg)
datatype: DOUBLE
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/phaseshift
state_quant: Demod2Enable
state_value_1: 1

[Demod2Signal]
label: Signal
datatype: COMBO
combo_def_1: Sig In 1
combo_def_2: Curr In 1
combo_def_3: Trigger 1
combo_def_4: Trigger 2
combo_def_5: Aux Out 1
combo_def_6: Aux Out 2
combo_def_7: Aux Out 3
combo_def_8: Aux Out 4
combo_def_9: Aux In 1
combo_def_10: Aux In 2
combo_def_11: Constant
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
cmd_def_11: 174
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/adcselect
state_quant: Demod2Enable
state_value_1: 1

[Demod2Order]
label: Order
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/order
state_quant: Demod2Enable
state_value_1: 1

[Demod2BWUnit]
label: Unit
datatype: COMBO
combo_def_1: TC
combo_def_2: BW NEP
combo_def_3: BW 3 dB
group: Demodulator 2
section: Demodulator
state_quant: Demod2Enable
state_value_1: 1

[Demod2TC]
label: Time constant
datatype: DOUBLE
state_quant: Demod2BWUnit
state_value_1: TC
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/timeconstant

[Demod2BwNep]
label: BW NEP
datatype: DOUBLE
state_quant: Demod2BWUnit
state_value_1: BW NEP
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/timeconstant

[Demod2Bw3db]
label: BW 3 db
datatype: DOUBLE
state_quant: Demod2BWUnit
state_value_1: BW 3 dB
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/timeconstant

[Demod2SincFilter]
label: Sinc
datatype: BOOLEAN
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/sinc
state_quant: Demod2Enable
state_value_1: 1

[Demod2Rate]
label: Rate (Sa/s)
datatype: DOUBLE
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/rate
state_quant: Demod2Enable
state_value_1: 1

### Demodulator 3 ###
[Demod3Enable]
label: Enable
datatype: BOOLEAN
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/enable

[Demod3Mode]
label: Mode
datatype: COMBO
combo_def_1: Manual
combo_def_2: ExtRef
combo_def_3: ExtRef Low BW
combo_def_4: ExtRef High BW
cmd_def_1: 0
cmd_def_2: 4
cmd_def_3: 2
cmd_def_4: 3
permission: READ
group: Demodulator 3
section: Demodulator
get_cmd: /%s/extrefs/2/%s
state_quant: Demod3Enable
state_value_1: 1

[Demod3Osc]
label: Oscillator
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/oscselect
state_quant: Demod3Enable
state_value_1: 1

[Demod3Harm]
label: Harmonic
datatype: DOUBLE
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/harmonic
state_quant: Demod3Enable
state_value_1: 1

[Demod3Freq]
label: Frequency
datatype: DOUBLE
permission: READ
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/freq
state_quant: Demod3Enable
state_value_1: 1

[Demod3PhaseAdjust]
label: Phase adjust
datatype: BUTTON
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/phaseadjust
state_quant: Demod3Enable
state_value_1: 1

[Demod3Phase]
label: Phase (deg)
datatype: DOUBLE
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/phaseshift
state_quant: Demod3Enable
state_value_1: 1

[Demod3Signal]
label: Signal
datatype: COMBO
combo_def_1: Sig In 1
combo_def_2: Curr In 1
combo_def_3: Trigger 1
combo_def_4: Trigger 2
combo_def_5: Aux Out 1
combo_def_6: Aux Out 2
combo_def_7: Aux Out 3
combo_def_8: Aux Out 4
combo_def_9: Aux In 1
combo_def_10: Aux In 2
combo_def_11: Constant
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
cmd_def_11: 174
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/adcselect
state_quant: Demod3Enable
state_value_1: 1

[Demod3Order]
label: Order
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/order
state_quant: Demod3Enable
state_value_1: 1

[Demod3BWUnit]
label: Unit
datatype: COMBO
combo_def_1: TC
combo_def_2: BW NEP
combo_def_3: BW 3 dB
group: Demodulator 3
section: Demodulator
state_quant: Demod3Enable
state_value_1: 1

[Demod3TC]
label: Time constant
datatype: DOUBLE
state_quant: Demod3BWUnit
state_value_1: TC
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/timeconstant

[Demod3BwNep]
label: BW NEP
datatype: DOUBLE
state_quant: Demod3BWUnit
state_value_1: BW NEP
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/timeconstant

[Demod3Bw3db]
label: BW 3 db
datatype: DOUBLE
state_quant: Demod3BWUnit
state_value_1: BW 3 dB
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/timeconstant

[Demod3SincFilter]
label: Sinc
datatype: BOOLEAN
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/sinc
state_quant: Demod3Enable
state_value_1: 1

[Demod3Rate]
label: Rate (Sa/s)
datatype: DOUBLE
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/rate
state_quant: Demod3Enable
state_value_1: 1

### Demodulator 4 ###
[Demod4Enable]
label: Enable
datatype: BOOLEAN
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/enable

[Demod4Mode]
label: Mode
datatype: COMBO
combo_def_1: Manual
combo_def_2: ExtRef
combo_def_3: ExtRef Low BW
combo_def_4: ExtRef High BW
cmd_def_1: 0
cmd_def_2: 4
cmd_def_3: 2
cmd_def_4: 3
group: Demodulator 4
section: Demodulator
get_cmd: /%s/extrefs/1/%s
state_quant: Demod4Enable
state_value_1: 1

[Demod4Osc]
label: Oscillator
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/oscselect
state_quant: Demod4Enable
state_value_1: 1

[Demod4Harm]
label: Harmonic
datatype: DOUBLE
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/harmonic
state_quant: Demod4Enable
state_value_1: 1

[Demod4Freq]
label: Frequency
datatype: DOUBLE
permission: READ
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/freq
state_quant: Demod4Enable
state_value_1: 1

[Demod4PhaseAdjust]
label: Phase adjust
datatype: BUTTON
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/phaseadjust
state_quant: Demod4Enable
state_value_1: 1

[Demod4Phase]
label: Phase (deg)
datatype: DOUBLE
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/phaseshift
state_quant: Demod4Enable
state_value_1: 1

[Demod4Signal]
label: Signal
datatype: COMBO
combo_def_1: Sig In 1
combo_def_2: Curr In 1
combo_def_3: Trigger 1
combo_def_4: Trigger 2
combo_def_5: Aux Out 1
combo_def_6: Aux Out 2
combo_def_7: Aux Out 3
combo_def_8: Aux Out 4
combo_def_9: Aux In 1
combo_def_10: Aux In 2
combo_def_11: Constant
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
cmd_def_11: 174
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/adcselect
state_quant: Demod4Enable
state_value_1: 1

[Demod4Order]
label: Order
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/order
state_quant: Demod4Enable
state_value_1: 1

[Demod4BWUnit]
label: Unit
datatype: COMBO
combo_def_1: TC
combo_def_2: BW NEP
combo_def_3: BW 3 dB
group: Demodulator 4
section: Demodulator
state_quant: Demod4Enable
state_value_1: 1

[Demod4TC]
label: Time constant
datatype: DOUBLE
state_quant: Demod4BWUnit
state_value_1: TC
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/timeconstant

[Demod4BwNep]
label: BW NEP
datatype: DOUBLE
state_quant: Demod4BWUnit
state_value_1: BW NEP
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/timeconstant

[Demod4Bw3db]
label: BW 3 db
datatype: DOUBLE
state_quant: Demod4BWUnit
state_value_1: BW 3 dB
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/timeconstant

[Demod4SincFilter]
label: Sinc
datatype: BOOLEAN
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/sinc
state_quant: Demod4Enable
state_value_1: 1

[Demod4Rate]
label: Rate (Sa/s)
datatype: DOUBLE
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/rate
state_quant: Demod4Enable
state_value_1: 1

##############################################################################
############################### Output Amplitudes ############################
##############################################################################

### Amplitude 1 ###
[OutAmp1Enable]
label: Enable
datatype: BOOLEAN
group: Output Amplitude 1
section: Output Amplitude
get_cmd: /%s/sigouts/0/enables/0

[OutAmp1Mode]
label: Mode
datatype: STRING
group: Output Amplitude 1
section: Output Amplitude
permission: READ
state_quant: OutAmp1Enable
state_value_1: 1

[OutAmp1Unit]
label: Unit
datatype: COMBO
combo_def_1: Vpk
combo_def_2: Vrms
group: Output Amplitude 1
section: Output Amplitude
state_quant: OutAmp1Enable
state_value_1: 1

[OutAmp1VpkValue]
label: Amplitude 1 (Vpk)
datatype: DOUBLE
group: Output Amplitude 1
section: Output Amplitude
get_cmd: /%s/sigouts/0/amplitudes/0
state_quant: OutAmp1Unit
state_value_1: Vpk

[OutAmp1VrmsValue]
label: Amplitude 1 (Vrms)
datatype: DOUBLE
group: Output Amplitude 1
section: Output Amplitude
get_cmd: /%s/sigouts/0/amplitudes/0
state_quant: OutAmp1Unit
state_value_1: Vrms

### Amplitude 2 ###
[OutAmp2Enable]
label: Enable
datatype: BOOLEAN
group: Output Amplitude 2
section: Output Amplitude
get_cmd: /%s/sigouts/0/enables/1

[OutAmp2Mode]
label: Mode
datatype: STRING
group: Output Amplitude 2
section: Output Amplitude
permission: READ
state_quant: OutAmp2Enable
state_value_1: 1

[OutAmp2Unit]
label: Unit
datatype: COMBO
combo_def_1: Vpk
combo_def_2: Vrms
group: Output Amplitude 2
section: Output Amplitude
state_quant: OutAmp2Enable
state_value_1: 1

[OutAmp2VpkValue]
label: Amplitude 2 (Vpk)
datatype: DOUBLE
group: Output Amplitude 2
section: Output Amplitude
get_cmd: /%s/sigouts/0/amplitudes/1
state_quant: OutAmp2Unit
state_value_1: Vpk

[OutAmp2VrmsValue]
label: Amplitude 2 (Vrms)
datatype: DOUBLE
group: Output Amplitude 2
section: Output Amplitude
get_cmd: /%s/sigouts/0/amplitudes/1
state_quant: OutAmp2Unit
state_value_1: Vrms

### Amplitude 3 ###
[OutAmp3Enable]
label: Enable
datatype: BOOLEAN
group: Output Amplitude 3
section: Output Amplitude
get_cmd: /%s/sigouts/0/enables/2

[OutAmp3Mode]
label: Mode
datatype: STRING
group: Output Amplitude 3
section: Output Amplitude
permission: READ
state_quant: OutAmp3Enable
state_value_1: 1

[OutAmp3Unit]
label: Unit
datatype: COMBO
combo_def_1: Vpk
combo_def_2: Vrms
group: Output Amplitude 3
section: Output Amplitude
state_quant: OutAmp3Enable
state_value_1: 1

[OutAmp3VpkValue]
label: Amplitude 1 (Vpk)
datatype: DOUBLE
group: Output Amplitude 3
section: Output Amplitude
get_cmd: /%s/sigouts/0/amplitudes/2
state_quant: OutAmp3Unit
state_value_1: Vpk

[OutAmp3VrmsValue]
label: Amplitude 1 (Vrms)
datatype: DOUBLE
group: Output Amplitude 3
section: Output Amplitude
get_cmd: /%s/sigouts/0/amplitudes/2
state_quant: OutAmp3Unit
state_value_1: Vrms

### Amplitude 4 ###
[OutAmp4Enable]
label: Enable
datatype: BOOLEAN
group: Output Amplitude 4
section: Output Amplitude
get_cmd: /%s/sigouts/0/enables/3

[OutAmp4Mode]
label: Mode
datatype: STRING
group: Output Amplitude 4
section: Output Amplitude
permission: READ
state_quant: OutAmp4Enable
state_value_1: 1

[OutAmp4Unit]
label: Unit
datatype: COMBO
combo_def_1: Vpk
combo_def_2: Vrms
group: Output Amplitude 4
section: Output Amplitude
state_quant: OutAmp4Enable
state_value_1: 1

[OutAmp4VpkValue]
label: Amplitude 1 (Vpk)
datatype: DOUBLE
group: Output Amplitude 4
section: Output Amplitude
get_cmd: /%s/sigouts/0/amplitudes/3
state_quant: OutAmp4Unit
state_value_1: Vpk

[OutAmp4VrmsValue]
label: Amplitude 1 (Vrms)
datatype: DOUBLE
group: Output Amplitude 4
section: Output Amplitude
get_cmd: /%s/sigouts/0/amplitudes/3
state_quant: OutAmp4Unit
state_value_1: Vrms

##############################################################################
################################ Signal Outputs ##############################
##############################################################################

[SigOut1Enable]
label: Enable
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/on

[SigOut1Imp50]
label: 50 Ohm
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/imp50

[SigOut1Range]
label: Range
datatype: COMBO
combo_def_1: 10mV
combo_def_2: 100mV
combo_def_3: 1V
combo_def_4: 10v
cmd_def_1: 0.01
cmd_def_2: 0.1
cmd_def_3: 1
cmd_def_4: 10
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/range

[SigOut1Autorange]
label: Autorange
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/autorange

[SigOut1Offset]
label: Offset
datatype: DOUBLE
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/offset

[SigOut1Add]
label: Add
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/add

[SigOut1Diff]
label: Diff
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/diff